# Gray-Scott System: 1D; Spatially Discretised; Periodic BCs

############ Parameters. Uncomment one and use corresponding IC file ############

# par kill=0.060 Feed=0.040 Du=0.00002 Dv=0.00001 h=0.004 # use XPPIC_k060F040_xL4
# par kill=0.050 Feed=0.022 Du=0.00002 Dv=0.00001 h=0.008 # use XPPIC_k050F022
# par kill=0.055 Feed=0.030 Du=0.00002 Dv=0.00001 h=0.008 # use XPPIC_k055F030   
par kill=0.060 Feed=0.040 Du=0.00002 Dv=0.00001 h=0.008 # use XPPIC_k060F040
# par kill=0.060 Feed=0.060 Du=0.00002 Dv=0.00001 h=0.008 # use XPPIC_k060F060 
# par kill=0.065 Feed=0.040 Du=0.00002 Dv=0.00001 h=0.008 # use XPPIC_k065F040 

#################################################################################

f(u,v)=-u*v^2+Feed*(1-u)
g(u,v)= u*v^2-(Feed+kill)*v

u1'=f(u1,v1)+Du*(u101-2*u1+u2)/h^2
v1'=g(u1,v1)+Dv*(v101-2*v1+v2)/h^2

%[2..100]
u[j]'=f(u[j],v[j])+Du*(u[j-1]-2*u[j]+u[j+1])/h^2
v[j]'=g(u[j],v[j])+Dv*(v[j-1]-2*v[j]+v[j+1])/h^2
%

u101'=f(u101,v101)+Du*(u100-2*u101+u1)/h^2
v101'=g(u101,v101)+Dv*(v100-2*v101+v1)/h^2

@ xlo=0 xhi=10000 ylo=0 yhi=1 total=10000, dt=0.01
@ meth=cvode, bandup=2, bandlo=2,
done
